PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['main_conditions.csv', 'practice_conditions.csv']
  Screen = 1
  Units = height
  Window size (pixels) = [1470, 956]
  color = -1.0000, -1.0000, -1.0000
  expName = ASS_builder_online
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine instr
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    TextComponent instrText
      font = Hiragino Sans
      letterHeight = 0.045
      startVal [time (s)] = 0.0
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      text:
        本実験では、単純な音が聞こえます。
        音が再生された後に画面が切り替わります。

        聞こえ方を以下のいずれかで判断してください：

        1： 1つの音列として聞こえた
        2： 複数の音列として聞こえた

        可能な限り、速く直感的に
        1 または 2 を押してください。

        スペースキー で次の画面に遷移します。
    KeyboardComponent instrKey
      allowedKeys = 'space','escape'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_intro
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    TextComponent pracIntroText
      font = Hiragino Sans
      letterHeight = 0.045
      startVal [time (s)] = 0.0
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      text:
        まずは練習をしましょう。

        準備ができたら
        スペースキー を押してください。
    KeyboardComponent pracIntroKey
      allowedKeys = 'space','escape'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_trial_sound
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    TextComponent fixation
      letterHeight = 0.08
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.7
      text = +
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    SoundComponent stimSound
      forceEndRoutine = False
      sound [set every repeat] = $soundFile
      startVal [time (s)] = 0.8
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  Routine practice_trial_response
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    TextComponent response
      font = Hiragino Sans
      letterHeight = 0.05
      startVal [time (s)] = 0
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      text:
        どのように聞こえましたか？

        1： 1つの音列として聞こえた
        2： 複数の音列として聞こえた
    KeyboardComponent key_resp
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine main_intro
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    TextComponent main_text
      font = Hiragino Sans
      letterHeight = 0.045
      startVal [time (s)] = 0
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      text:
        練習は終了です。
        続いて本番に移ります。

        スペースキー で開始してください。
    KeyboardComponent start_key
      allowedKeys = 'space','escape'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine main_trial_sound
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    TextComponent fixation_2
      letterHeight = 0.08
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.7
      text = +
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    SoundComponent stimSound_2
      forceEndRoutine = False
      sound [set every repeat] = $soundFile
      startVal [time (s)] = 0.8
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  Routine main_trial_response
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    TextComponent response_2
      font = Hiragino Sans
      letterHeight = 0.05
      startVal [time (s)] = 0
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      text:
        どのように聞こえましたか？

        1： 1つの音列として聞こえた
        2： 複数の音列として聞こえた
    KeyboardComponent key_resp_2
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine main_trial_sound2
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    TextComponent fixation_3
      letterHeight = 0.08
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.7
      text = +
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    SoundComponent stimSound_3
      forceEndRoutine = False
      sound [set every repeat] = $soundFile
      startVal [time (s)] = 0.8
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  Routine main_trial_response2
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    TextComponent response_3
      font = Hiragino Sans
      letterHeight = 0.05
      startVal [time (s)] = 0
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      text:
        どのように聞こえましたか？

        1： 1つの音列として聞こえた
        2： 複数の音列として聞こえた
    KeyboardComponent key_resp_3
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine thanks
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    TextComponent thanks_text
      font = Hiragino Sans
      letterHeight = 0.045
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text = 実験は終了です。お疲れ様でした =^^=
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  Routine break_2
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    TextComponent break_text
      font = Hiragino Sans
      letterHeight = 0.045
      startVal [time (s)] = 0
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      text:
        休憩です。
        実験の半分が終了しました。

        準備が整ったら
        スペースキーを 押してください。
    KeyboardComponent break_key
      allowedKeys = 'space','escape'
      forceEndRoutine = True
      startVal [time (s)] = 0
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Flow
  Routine instr
  Routine practice_intro
  LoopInitiator practiceLoop loopType="TrialHandler"
    conditionsFile = practice_conditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('soundFile', 'stimuli/stim_df2_soa0.09.wav'), ('df', np.int64(2)), ('soa', np.float64(0.09))]),
      OrderedDict([('soundFile', 'stimuli/stim_df2_soa0.12.wav'), ('df', np.int64(2)), ('soa', np.float64(0.12))]),
      OrderedDict([('soundFile', 'stimuli/stim_df2_soa0.18.wav'), ('df', np.int64(2)), ('soa', np.float64(0.18))]),
      OrderedDict([('soundFile', 'stimuli/stim_df4_soa0.09.wav'), ('df', np.int64(4)), ('soa', np.float64(0.09))]),
      OrderedDict([('soundFile', 'stimuli/stim_df4_soa0.12.wav'), ('df', np.int64(4)), ('soa', np.float64(0.12))]),
      OrderedDict([('soundFile', 'stimuli/stim_df4_soa0.18.wav'), ('df', np.int64(4)), ('soa', np.float64(0.18))]),
      OrderedDict([('soundFile', 'stimuli/stim_df6_soa0.09.wav'), ('df', np.int64(6)), ('soa', np.float64(0.09))]),
      OrderedDict([('soundFile', 'stimuli/stim_df6_soa0.12.wav'), ('df', np.int64(6)), ('soa', np.float64(0.12))]),
      OrderedDict([('soundFile', 'stimuli/stim_df6_soa0.18.wav'), ('df', np.int64(6)), ('soa', np.float64(0.18))]),
      OrderedDict([('soundFile', 'stimuli/stim_df8_soa0.09.wav'), ('df', np.int64(8)), ('soa', np.float64(0.09))]),
      OrderedDict([('soundFile', 'stimuli/stim_df8_soa0.12.wav'), ('df', np.int64(8)), ('soa', np.float64(0.12))]),
      OrderedDict([('soundFile', 'stimuli/stim_df8_soa0.18.wav'), ('df', np.int64(8)), ('soa', np.float64(0.18))]),
      OrderedDict([('soundFile', 'stimuli/stim_df10_soa0.09.wav'), ('df', np.int64(10)), ('soa', np.float64(0.09))])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
    Routine practice_trial_sound
    Routine practice_trial_response
  LoopTerminator practiceLoop
  Routine main_intro
  LoopInitiator mainLoop loopType="TrialHandler"
    conditionsFile = main_conditions.csv
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('soundFile', 'stimuli/stim_df2_soa0.09.wav'), ('df', np.int64(2)), ('soa', np.float64(0.09))]),
      OrderedDict([('soundFile', 'stimuli/stim_df2_soa0.12.wav'), ('df', np.int64(2)), ('soa', np.float64(0.12))]),
      OrderedDict([('soundFile', 'stimuli/stim_df2_soa0.18.wav'), ('df', np.int64(2)), ('soa', np.float64(0.18))]),
      OrderedDict([('soundFile', 'stimuli/stim_df4_soa0.09.wav'), ('df', np.int64(4)), ('soa', np.float64(0.09))]),
      OrderedDict([('soundFile', 'stimuli/stim_df4_soa0.12.wav'), ('df', np.int64(4)), ('soa', np.float64(0.12))]),
      OrderedDict([('soundFile', 'stimuli/stim_df4_soa0.18.wav'), ('df', np.int64(4)), ('soa', np.float64(0.18))]),
      OrderedDict([('soundFile', 'stimuli/stim_df6_soa0.09.wav'), ('df', np.int64(6)), ('soa', np.float64(0.09))]),
      OrderedDict([('soundFile', 'stimuli/stim_df6_soa0.12.wav'), ('df', np.int64(6)), ('soa', np.float64(0.12))]),
      OrderedDict([('soundFile', 'stimuli/stim_df6_soa0.18.wav'), ('df', np.int64(6)), ('soa', np.float64(0.18))]),
      OrderedDict([('soundFile', 'stimuli/stim_df8_soa0.09.wav'), ('df', np.int64(8)), ('soa', np.float64(0.09))]),
      OrderedDict([('soundFile', 'stimuli/stim_df8_soa0.12.wav'), ('df', np.int64(8)), ('soa', np.float64(0.12))]),
      OrderedDict([('soundFile', 'stimuli/stim_df8_soa0.18.wav'), ('df', np.int64(8)), ('soa', np.float64(0.18))]),
      OrderedDict([('soundFile', 'stimuli/stim_df10_soa0.09.wav'), ('df', np.int64(10)), ('soa', np.float64(0.09))])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
    Routine main_trial_sound
    Routine main_trial_response
  LoopTerminator mainLoop
  Routine break_2
  LoopInitiator mainLoop2 loopType="TrialHandler"
    conditionsFile = main_conditions.csv
    loopType = random
    nReps = 5
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    conditions:
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    Routine main_trial_sound2
    Routine main_trial_response2
  LoopTerminator mainLoop2
  Routine thanks
